# The following yaml file contains all the startup information and metadata
# required for running Odemis for a METEOR system installed on a TESCAN microscope.
# Most parts are standard for all systems, but some metadata should be
# calibrated for each system.

# NOTE: whoever makes changes to this yaml file automatically accepts
# responsibility for any potential (hardware) damages as a consequence.
# Please ask your (local) installation/service engineer to connect via
# TeamViewer to make the desired changes if you do not want to take that
# responsibility yourself.

"METEOR Tescan2": {
    class: Microscope,
    role: meteor,
}

# Connects to Tescan SEM via SharkSEM
"Tescan SEM": {
    class: tescan.SEM,
    role: null,
    init: {host: "192.168.1.181"},
    # more detectors can be added, if necessary
    children: {scanner: "EBeam Scanner",
               detector0: "EBeam Detector",
               focus: "EBeam Focus",
    }
}

"EBeam Scanner": {
    # Internal child of Tescan, so no class
    role: e-beam,
    init: {
        fov_range: [196.e-9, 25586.e-6]
    },
}

"EBeam Detector": {
    role: se-detector,
    init: {
        channel: 0,
        detector: 1,
    },
}

"EBeam Focus": {
    role: ebeam-focus,
    init: {axes: [z]},
    affects: ["EBeam Scanner"]
}

# New sample stage
# TODO: update values for TESCAN 2
"Stage": {
    class: tmcm.TMCLController,
    role: stage-bare,
    init: {
        port: "/dev/fake6",
        address: null,
        axes: ["x", "y", "z", "rx", "rz"],
        ustepsize: [1.e-7, 1.e-7, 1.e-7, 1.2e-5, 1.2e-5], # unit/µstep
        rng: [[ -50.e-3, 50.e-3 ],
              [ -50.e-3, 50.e-3 ],
              [ 0, 94.e-3 ],
              [ -0.4363323129985824, 1.0122909661567112 ],
              [ -6.283185307179586, 6.283185307179586 ]
        ],
        unit: ["m", "m", "m", "rad", "rad"],
        refproc: "Standard",
    },
    metadata: {
        # Loading position:
        FAV_POS_DEACTIVE: {
            'rx': 0.0,
            'rz': -1.0471975511965976,
            'x': -30.e-3,
            'y': -40.e-03,
            'z': 45.e-3
        },
        # XYZ ranges for SEM & METEOR (FM imaging range should perfectly match the POS_ACTIVE_RANGE metadata of the "Meteor Stage" component!),
        # Z range is based on centering a sample at the FIB/SEM coincident point at a Z coordinate of ~ 30 mm:
        SEM_IMAGING_RANGE: {
            "x": [-13.e-3, 7.e-3],
            "y": [-10.e-3, 10.e-3],
            "z": [28.e-3, 32.e-3]
        },
        FM_IMAGING_RANGE: {
            "x": [44.e-3, 15.e-3],
            "y": [-23.e-3, 3.e-3],
            "z": [28.e-3, 32.e-3]
        },
        # Grid centers in SEM range, at rx = FAV_SEM_POS_ACTIVE,
        # These values are based on the expectation from the CAD model. Recalibrate for each system:
        SAMPLE_CENTERS: {
            "GRID 1": {
                'x': -2.9133e-3,
                'y': 0.1319e-3,
                'z': 29.2433e-3
            },
            "GRID 2": {
                'x': 1.0867e-3,
                'y': 0.1319e-3,
                'z': 29.2433e-3
            }
        },
        # Calibrated values used for the SEM/FM switching behaviour
        CALIB: {
            "version": "tescan_2"
            # These three values were only present in the original meteor-tescan file.
            "x_0": -2.188e-3,
            "y_0": -0.05995e-3,
            "z_ct": 4.773e-3,
            # The following parameters were both present at the original meteor-tescan and tfs3 file, with the exception
            # of pre-tilt.
            "dx": 40.e-3,
            "dy": 0.1e-3,
            "b_y": -0.297e-3,
            "pre-tilt": 0.698132,
            "use_linked_sem_focus_compensation": false,
        },
        # Active tilting (T/rx) & rotation (R/rz) angles positions when switching between SEM & FM.
        # Calibrate for each system, and make sure the difference in rz between FM and SEM is exactly 180°
        # The values are in radians. Please also update the values in degrees as written in the comments.
        # Note that the rz range in the TESCAN software is between -170° and 40°
        # Change the SEM tilt angle to a value that matches the customer's needs
        # Note that the accuracy of the FM/SEM switch might be reduced if starting at a different angle.
        FAV_FM_POS_ACTIVE: {"rx": 0.261799, "rz": -2.6179938779914944},
        FAV_SEM_POS_ACTIVE: {"rx": 0.698132, "rz": 0.523598775}, # I'm assuming this is for SEM overview images?
        FAV_MILL_POS_ACTIVE: {"rx": 0.261799, "rz": 0.523598775}, 

    },
}

"Light Source": {
    class: omicronxx.HubxX,
    role: light,
    init: {
        port: "/dev/fakehub", # Simulator
        # port: "/dev/ttyFTDI*",
    },
    affects: ["Camera"],
}

"Optical Objective": {
    class: static.OpticalLens,
    role: lens,
    init: {
        # Update these values based on the objective currently used:
        mag: 50.0, # ratio, effective magnification of complete light path -> mag = objective_mag * 300 / 180
        na: 0.8, # ratio, numerical aperture of objective
        ri: 1.0, # ratio, refractive index of the medium between the objective and the sample (1.0 for vacuum)
    },
    affects: ["Camera"]
}

# Camera choice: only keep the lines for the camera component used in this specific METEOR configuration. Remove/comment the rest.
# TO DO: add component for the Andor Sona camera.

# Andor Zyla
"Camera": {
    class: andorcam2.AndorCam2,
    role: ccd,
    init: {
        # device: 0,  # if a real camera is plugged in, it's usually 0
        device: "fake",
        # TODO: adjust the axes so that they match the SEM orientation (with scan rotation = 0)
        transp: [2, 1], # To swap/invert axes
        # TODO: adjust the cropping (use multiple of 4, for a better handling of the binning)
        # Calibrate per system to obtain right balance between uniform image and large field of view.
        # max_res: [2048, 2048], # Crop the image as the optical FoV is smaller than the whole CMOS area
    },
    properties: {
        # To change some default settings
#        targetTemperature: 0,
    },
    metadata: {
        # The camera is exactly parallel to the stage axes for METEOR 2.0
        ROTATION: 0, # [rad] (=0°)
    },
}

# Controller for the filter-wheel
# TMCM-6110: DIP must be configured with address 7 (= 1110000)
# TMCM-1211: Must be pre-initiliazed with address 17
"Optical Actuators": {
    class: tmcm.TMCLController,
    role: null,
    init: {
        # port: "/dev/ttyTMCM*",
        #address: 7,  # TMCM-6110
        #address: 17,  # TMCM-1211
        port: "/dev/fake", # Simulator
        address: null, # Simulator
        # param_file: "/usr/share/odemis/meteor-tmcm1211-filterwheel.tmcm.tsv", # Needs different file for METEOR 2.0!
        axes: ["fw"],
        ustepsize: [1.227184e-6], # [rad/µstep] # This still needs to be updated for METEOR 2.0!!
        rng: [[-14, 7]], # rad, more than 0->2 Pi, in order to allow one extra rotation in both direction, when quickly switching
        unit: ["rad"],
        refproc: "Standard",
        refswitch: {"fw": 0}, #digital output used to switch on/off sensor
        #inverted: ["fw"], # for the filter wheel, the direction doesn't matter, as long as the positions are correct
    },
}

"AntiBacklash for Filter Wheel": {
    class: actuator.AntiBacklashActuator,
    role: null,
    init: {
        backlash: {
            # Force every move to always finish in the same direction
            "fw": 50.e-3,  # rad
        },
    },
    children: {"slave": "Optical Actuators"},
}

"Filter Wheel": {
    class: actuator.FixedPositionsActuator,
    role: filter,
    dependencies: {"band": "AntiBacklash for Filter Wheel"},
    init: {
        axis_name: "fw",
        # This filter-wheel is made so that the light goes through two "holes":
        # the filter, and the opposite hole (left empty). So although it has 8
        # holes, it only supports 4 filters (from 0° to 135°), and there is no
        # "fast-path" between the last filter and the first one.
        positions: {
            # pos (rad) -> m,m
            0.3: "pass-through", # Slot 1: Pass-through
            1.3471975512: [414.e-9, 450.e-9], # Slot 2: FF01-432/36
            2.39439510239: [500.e-9, 530.e-9], # Slot 3: FF01-515/30
            3.44159265359: [579.5e-9, 610.5e-9], # Slot 4: FF01-595/31
            4.48879020479: [663.e-9, 733.e-9], # Slot 5: FF02-698/70
            5.53598775598: [[413.e-9, 451.e-9],[499.e-9, 531.e-9],[579.e-9, 611.e-9],[662.e-9, 800.e-9]], #Quad-band filter
        },
        cycle: 6.283185, # position of ref switch (0) after a full turn (= 2*pi)
    },
    affects: ["Camera"],
}

# CLS3252dsc-1
"Optical Focus": {
    class: smaract.MCS2,
    role: focus,
    init: {
        # locator: "network:sn:MCS2-00006895",
        locator: "fake",  # For simulator
        # param_file: "/usr/share/odemis/meteor-optical-focus.mcs2.tsv",
        ref_on_init: True,
        # TODO: check speed/accel
        speed: 0.002,  # m/s
        accel: 0.002,  # m/s²
        #hold_time: 5 # s, default = infinite
        # TODO: check the ranges
        axes: {
            'z': {
                # 0 is safely parked (FAV_POS_DEACTIVE)
                # 17mm is typically in focus (FAV_POS_ACTIVE)
                range: [-25.e-3, 5.e-3],
                unit: 'm',
                channel: 0,
            },
        },
    },

    metadata: {
        # TODO: calibrate the value
        # Loading position to retract lens
        FAV_POS_DEACTIVE: {'z': -15.e-3},
        # Initial active position (will be updated with the current focus value each system run)
        FAV_POS_ACTIVE: {'z': -1.e-3}
    },
    affects: ["Camera"],
}
